#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    servername: localhost
    remoteport: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    # below here is my hardware

    mynicard:
        module.Class: 'ni_card.NICard'
        clock_channel: '/Dev1/Ctr0'
        counter_channel: '/Dev1/Ctr1'
        scanner_clock_channel: '/Dev1/Ctr2'
        scanner_counter_channel: '/Dev1/Ctr3'
        photon_source: '/Dev1/PFI3'
        gate_in_channel: '/Dev1/PFI1'
        odmr_trigger_channel: '/Dev1/PFI0'
        counting_edge_rising: True
        scanner_ao_channels: '/Dev1/AO0:3'
        scanner_x_ao: '/Dev1/AO0'
        scanner_y_ao: '/Dev1/AO1'
        scanner_z_ao: '/Dev1/AO2'
        scanner_a_ao: '/Dev1/AO3' 
        clock_frequency: 100               # in Hz
        scanner_clock_frequency: 100       # in Hz
        x_range: [0, 100]                    # in micrometer --> need to change to be in meter to be in line with what the programmer wants but for now just change the code such that the resolution is in nm
        y_range: [0,100]                    # in micrometer --> need to change to be in meter
        z_range: [-10,10]                 # in micrometer --> need to change to be in meter
        a_range: [0,200]                    # 4th unused analog output of NI
        voltage_range: [0,10]             # in volts
        samples_number: 10                 # for gated counting



    simpledatadummy:
        module.Class: 'simple_data_dummy.SimpleDummy'

    mykrowave:
        #module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        #gpib_address: 'dummy'
        module.Class: 'microwave.mw_source_smiq.MicrowaveSmiq'
        gpib_address: 'GPIB0::28::INSTR'
        gpib_timeout: 20
        mock: True

    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        source_channels: 4
        clock_frequency: 100
        count_distribution: 'dark_bright_poisson'
        remoteaccess: True

    mydummyodmrcounter:
        module.Class: 'odmr_counter_dummy.ODMRCounterDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

    mydummyfastcounter:
        module.Class: 'fast_counter_dummy.FastCounterDummy'
        #choose_trace: True
        #gated: False

    mydummypulser:
        module.Class: 'pulser_dummy.PulserDummy'

    mydummywavemeter:
        module.Class: 'wavemeter_dummy.WavemeterDummy'
        measurement_timing: 10

    mydummyswitch1:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    mydummyswitch2:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    myspectrometer:
        module.Class: 'spectrometer.spectrometer_dummy.SpectrometerInterfaceDummy'
        connect:
            fitlogic: 'fitlogic'

    motordummy:
        module.Class: 'motor.motor_dummy.MotorDummy'

    magnetdummy:
        module.Class: 'magnet.magnet_dummy.MagnetDummy'

    processdummy:
        module.Class: 'process_dummy.ProcessDummy'

    laserdummy:
        module.Class: 'laser.simple_laser_dummy.SimpleLaserDummy'

logic:
    simpledatalogic:
        module.Class: 'simple_data_logic.SimpleDataLogic'
        connect:
            simpledata: 'simpledatadummy'

    softpid:
        module.Class: 'software_pid_controller.SoftPIDController'
        connect:
            process: 'processdummy'
            control: 'processdummy'

    pidlogic:
        module.Class: 'pid_logic.PIDLogic'
        connect:
            controller: 'softpid'
            savelogic: 'savelogic'

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    pulsedmasterlogic:
        module.Class: 'pulsed_master_logic.PulsedMasterLogic'
        direct_write: False
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'sequence_generator_logic.SequenceGeneratorLogic'
        #overhead_bytes: 4294967296  Not properly implemented yet
        #additional_methods_dir: 'C:\\Custom_dir\\Methods' optional

    pulseextractionlogic:
        module.Class: 'pulse_extraction_logic.PulseExtractionLogic'

    pulseanalysislogic:
        module.Class: 'pulse_analysis_logic.PulseAnalysisLogic'

    pulsedmeasurementlogic:
        module.Class: 'pulsed_measurement_logic.PulsedMeasurementLogic'
        connect:
            fastcounter: 'mydummyfastcounter'
            pulseanalysislogic: 'pulseanalysislogic'
            pulseextractionlogic: 'pulseextractionlogic'
            pulsegenerator: 'mydummypulser'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'mykrowave'

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect: 
           #counter1: 'mydummycounter'
            counter1: 'mynicard'
            savelogic: 'savelogic'

    gatedcounterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter'
            savelogic: 'savelogic'

    wavemeterloggerlogic:
        module.Class: 'wavemeter_logger_logic.WavemeterLoggerLogic'
        logic_acquisition_timing: 20
        logic_update_timing: 100
        connect:
            wavemeter1: 'mydummywavemeter'
            savelogic: 'savelogic'
            counterlogic: 'counterlogic'

    switchlogic:
        module.Class: 'switch_logic.SwitchLogic'
        connect:
            switch1: 'mydummyswitch1'
            switch2: 'mydummyswitch2'

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            #confocalscanner1: 'scanner_tilt_interfuse'
            confocalscanner1: 'mynicard'
            savelogic: 'savelogic'

    scanner_tilt_interfuse:
        module.Class: 'interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            #confocalscanner1: 'mydummyscanner'
            confocalscanner1: 'mynicard'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
           #confocalscanner1: 'scanner_tilt_interfuse.confocalscanner1'
            confocalscanner1: 'mynicard'
            fitlogic: 'fitlogic'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimizer1: 'optimizerlogic'
            savelogic: 'savelogic'

    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            #odmrcounter: 'mydummyodmrcounter'
            odmrcounter: 'mynicard'
            fitlogic: 'fitlogic'
            microwave1: 'mykrowave'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
        #    dummytask:
        #        module: 'dummy'
        #        preposttasks: ['ppdummy']
        #    dummyinterruptor:
        #        module: 'dummy'
        #        pausetasks: ['dummytask']
        #        preposttasks: ['ppdummy2']
        #    ppdummy:
        #        module: 'prepostdummy'
        #    ppdummy2:	
        #        module: 'prepostdummy'
        #    scannerLocationRefocus:
        #        module: 'refocus'
        #        preposttasks: ['fliplasermirror']
        #        pausetasks: ['scan', 'odmr']
        #        needsmodules:
        #            optimizer: 'optimizerlogic'
        #        config:
        #            initial: [1, 1, 1]
        #    fliplasermirror:
        #        module: 'flipmirror'
        #        needsmodules:
        #            switchlogic: 'switch'
        #        config:
        #            sequence: [('mydummyswitch1', 1, True), ('mydummyswitch1', 2, True), ('mydummyswitch2', 1, True)]

    automationlogic:
        module.Class: 'automation.AutomationLogic'
        connect:
            taskrunner: 'tasklogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True

    spectrumlogic:
        module.Class: 'spectrum.SpectrumLogic'
        connect:
            spectrometer: 'myspectrometer'
            savelogic: 'savelogic'
            odmrlogic1: 'odmrlogic'

    magnet_logic:
        module.Class: 'magnet_logic.MagnetLogic'
        connect:
            magnetstage: 'magnetdummy'
            optimizerlogic: 'optimizerlogic'
            counterlogic: 'counterlogic'
            odmrlogic: 'odmrlogic'
            savelogic: 'savelogic'
            scannerlogic: 'scannerlogic'
            traceanalysis: 'trace_analysis_logic'
            gatedcounterlogic: 'gatedcounterlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    magnet_motor_interfuse:
        module.Class: 'interfuse.magnet_motor_interfuse.MagnetMotorInterfuse'
        connect:
            motorstage: 'motordummy'

    trace_analysis_logic:
        module.Class: 'trace_analysis_logic.TraceAnalysisLogic'
        connect:
            counterlogic1: 'gatedcounterlogic'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'

    qdplotlogic:
        module.Class: 'qdplot_logic.QdplotLogic'
        connect:
            savelogic: 'savelogic'

    nuopslogic:
        module.Class: 'nuclear_operations_logic.NuclearOperationsLogic'
        connect:
            sequencegenerationlogic: 'sequencegeneratorlogic'
            traceanalysislogic: 'trace_analysis_logic'
            gatedcounterlogic: 'gatedcounterlogic'
            odmrlogic: 'odmrlogic'
            optimizerlogic: 'optimizerlogic'
            scannerlogic: 'scannerlogic'
            savelogic: 'savelogic'

    laserlogic:
        module.Class: 'laser_logic.LaserLogic'
        connect:
            laser: 'laserdummy'

    pulsedextractionexternallogic:
        module.Class: 'pulsed_extraction_external_logic.PulsedExtractionExternalLogic'
        connect:
            savelogic: 'savelogic'
            pulseextractionlogic: 'pulseextractionlogic'
            pulseanalysislogic: 'pulseanalysislogic'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    counter:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic1: 'poimanagerlogic'
            confocallogic1: 'scannerlogic'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'savelogic'

    wavemeterlogger:
        module.Class: 'wavemeterlogger.wavemeterloggui.WavemeterLogGui'
        connect:
            wavemeterloggerlogic1: 'wavemeterloggerlogic'
            savelogic: 'savelogic'

    switches:
        module.Class: 'switcher.switchgui.SwitchGui'
        connect:
            switchlogic: 'switchlogic'

    taskrunner:
        module.Class: 'taskrunner.taskgui.TaskGui'
        connect:
            tasklogic: 'tasklogic'

    automation:
        module.Class: 'automation.automationgui.AutomationGui'
        connect:
            automationlogic: 'automationlogic'

    spectrometer:
        module.Class: 'spectrometer.spectrometergui.SpectrometerGui'
        connect:
            spectrumlogic1: 'spectrumlogic'

    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'
            savelogic: 'savelogic'

    simpledata:
        module.Class: 'simpledatagui.simpledatagui.SimpleDataGui'
        connect:
            simplelogic: 'simpledatalogic'

    magnet:
        module.Class: 'magnet.magnet_gui.MagnetGui'
        connect:
            magnetlogic1: 'magnet_logic'
            savelogic: 'savelogic'

    gatedcounter:
        module.Class: 'gated_counter.gated_counter_gui.GatedCounterGui'
        connect:
            gatedcounterlogic1: 'gatedcounterlogic'
            traceanalysislogic1: 'trace_analysis_logic'

    pidcontrol:
        module.Class: 'pidgui.pidgui.PIDGui'
        connect:
            pidlogic: 'pidlogic'

    errortest:
        module.Class: 'testgui.TestGui'

    qdplotter:
        module.Class: 'qdplotter.qdplottergui.QdplotterGui'
        connect:
            qdplotlogic1: 'qdplotlogic'

    nuclearops:
        module.Class: 'nuclear_operations.nuclear_operations.NuclearOperationsGui'
        connect:
            nuclearoperationslogic: 'nuopslogic'
            savelogic: 'savelogic'

    laser:
        module.Class: 'laser.laser.LaserGUI'
        connect:
            laserlogic: 'laserlogic'


    externalpulseextraction:
        module.Class: 'pulsed.pulsed_extraction_external_gui.PulsedExtractionExternalGui'
        connect:
            pulsedextractionexternallogic1: 'pulsedextractionexternallogic'
